# timeflux example using LSL as central data hub without connected neuroomega
# run as: timeflux -d -e TIMEFLUX_HOOK_PRE=aDBS_init graphs/aDBS/test_without_neuroomega.yml
# view at: http://localhost:8000/monitor/

graphs:

  # Signal processing graph: Fetches samples and computes biomarkers
  - id: SignalProcessing
    # NODES ------------------------------
    nodes:
    # Input node: Fetches samples from tmsi device
    - id: TmsiSampler
      module: nodes.TMSi.tmsi_sampler
      class: Tmsisampler
    # Epoch
    - id: Epoch
      module: nodes.data_flow.epoch
      class: Epoch
    # Signal processing node: Compute biomarker
    - id: Mean
      module: nodes.analysis.mean
      class: Mean
    # Output nodes: LSL node sending data to LSL stream
    - id: LSL_Saga
      module: nodes.data_flow.lsl
      class: Send
      params:
        name: Saga
    - id: LSL_Mean
      module: nodes.data_flow.lsl
      class: Send
      params:
        name: Mean
    # EDGES ------------------------------   
    edges: 
      - source: TmsiSampler
        target: Epoch
      - source: Epoch
        target: Mean
      - source: TmsiSampler
        target: LSL_Saga
      - source: Mean
        target: LSL_Mean
    rate: 0  # Run this graph x times per second

  # Stimulation graph: Receives biomarker and controls stimulation
  - id: Stimulation
  # NODES ------------------------------
    nodes:
    # Input nodes: Receive data from LSL stream
    - id: LSL_Mean
      module: nodes.data_flow.lsl
      class: Receive
      params:
        prop: name
        value: Mean
        max_samples: 1
    - id: LSL_StimSwitch
      module: nodes.data_flow.lsl
      class: Receive
      params:
        prop: name
        value: StimSwitch
        max_samples: 1
        timeout: 0.01
    # Control node: Check biomarker and adjust stimulation parameters
    - id: SingleThreshold
      module: nodes.aDBS.single_threshold
      class: Single_threshold
    # Stimulator node: Controls stim params on neuroomega
    - id: Stimulator
      module: nodes.AO.AO_stim_matlab
      class: AO_stim
     # Output nodes: LSL node sending data to LSL stream
    - id: LSL_StimParams
      module: nodes.data_flow.lsl
      class: Send
      params:
        name: StimParams
    # EDGES ------------------------------   
    edges: 
      - source: LSL_StimSwitch
        target: SingleThreshold:StimSwitch
      - source: LSL_Mean
        target: SingleThreshold:Biomarker
      - source: SingleThreshold
        target: Stimulator
      - source: Stimulator
        target: LSL_StimParams
    rate: 0  # Run this graph x times per second

  # Monitor graph: Receives data from broker and visualizes it
  - id: Monitor
    nodes:
    # NODES ------------------------------
    # Input nodes: Receive data from LSL stream
    - id: LSL_Saga
      module: nodes.data_flow.lsl
      class: Receive
      params:
        prop: name
        value: Saga
    - id: LSL_Mean
      module: nodes.data_flow.lsl
      class: Receive
      params:
        prop: name
        value: Mean
    - id: LSL_StimParams
      module: nodes.data_flow.lsl
      class: Receive
      params:
        prop: name
        value: StimParams
    # Synchronizer node: Adds clock time to stream timestamps
    - id: Synchronizer
      module: nodes.data_flow.sync
      class: Synchronizer
    # UI node: Receives data from subscribers and plots them
    - id: UI
      module: timeflux_ui.nodes.ui
      class: UI
    # Output node: LSL node sending data to LSL stream
    - id: LSL_StimSwitch
      module: nodes.data_flow.lsl
      class: Send
      params:
        name: StimSwitch
        channel_format: string
        labels: switch
    # EDGES ------------------------------   
    edges:
      - source: LSL_Saga
        target: Synchronizer:Saga
      - source: LSL_Mean
        target: Synchronizer:Mean
      - source: LSL_StimParams
        target: Synchronizer:StimParams
      - source: Synchronizer:Saga
        target: UI:Saga
      - source: Synchronizer:Mean
        target: UI:Mean
      - source: Synchronizer:StimParams
        target: UI:StimParams
      - source: UI:events
        target: LSL_StimSwitch
    rate: 5

  