# timeflux example dual-input with ZeroMQ (Publishing and Subscribing)
# PM running instructions: 
#   run from: cd C:\Users\habetsj\Research\projects\aDBS_C04\code\pyaDBS_ReTuneC04
#   cmd: timeflux -d graphs/example/hellodummy_ZeroMQ.yml
# view at: http://localhost:8000/monitor/
# TODO: solve FFT problem with x.real() with imported value in wrong float type
# TODO: apply LSL in dummy workflow

graphs:

  # The publish/subscribe broker graph
  - id: Broker
    nodes:
    # Allow communication between graphs
    - id: broker
      module: timeflux.nodes.zmq
      class: Broker
  

  # The main processing graph
  - id: DummyPublisher
    nodes:
    # # Receive ephys signal from Newronika sampler
    # - id: Newronika
    #   module: nodes.newronika.nwkstation
    #   class: interface
    #   params:
    #     name: signal
    - id: stn_import  # Import dummy ephys signal
      module: nodes.dummy.dummy_ephys
      class: Dummydata
      params:
        winlen: 256
        datasource: stn
    - id: ecog_import  # Import dummy ephys signal
      module: nodes.dummy.dummy_ephys
      class: Dummydata
      params:
        winlen: 256
        datasource: ecog
    - id: Welch_stn  # Compute the power spectral density
      module: timeflux_dsp.nodes.spectral
      class: Welch
      params:
        rate: 2048
        nperseg: 128
    - id: Welch_ecog  # Compute the power spectral density
      module: timeflux_dsp.nodes.spectral
      class: Welch
      params:
        rate: 2048
        nperseg: 128
    - id: Bands_stn  # Average the power over band frequencies
      module: timeflux_dsp.nodes.spectral
      class: Bands
      params:
        relative: True  # set to True for relative powers
    - id: Bands_ecog  # Average the power over band frequencies
      module: timeflux_dsp.nodes.spectral
      class: Bands
      params:
        relative: True  # set to True for relative powers
    - id: Pub_raw_stn  # Publish the raw Dummy ephys signal
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: raw_stn
    - id: Pub_raw_ecog  # Publish the raw Dummy ephys signal
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: raw_ecog
    - id: Pub_stn_bands  # Publish the frequency bands
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: bands_stn
    - id: Pub_ecog_bands  # Publish the frequency bands
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: bands_ecog
    - id: compare_stn  # Publish the frequency bands
      module: nodes.compare_input
      class: Compareinput
      params:
        rel_power: True
    - id: Pub_stn_output  # Publish the frequency bands
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: stn_output
    edges:  # Connect nodes WITHIN graph
      - source: stn_import
        target: Pub_raw_stn
      - source: ecog_import
        target: Pub_raw_ecog
      - source: stn_import
        target: Welch_stn
      - source: Welch_stn
        target: Bands_stn
      - source: ecog_import
        target: Welch_ecog
      - source: Welch_ecog
        target: Bands_ecog
      
      - source: Bands_stn:beta  # TODO: CHECK Bands class for band selection func
        target: compare_stn
      - source: Bands_stn:beta  # TODO: CHECK Bands class for band selection func
        target: Pub_stn_bands
      - source: Bands_ecog:beta
        target: Pub_ecog_bands
      - source: compare_stn
        target: Pub_stn_output
    rate: 4  # Run this graph 4 times per second

  - id: Subscriber
    nodes:
    - id: sub_raw
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics: [raw_stn, raw_ecog]
    - id: sub_bands
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics: [bands_stn, bands_ecog]
    - id: sub_output
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics: stn_output
    - id: monitor
      module: timeflux_ui.nodes.ui
      class: UI
    edges:
      - source: sub_raw:raw_stn
        target: monitor:raw_stn
      - source: sub_raw:raw_ecog
        target: monitor:raw_ecog
      - source: sub_bands:bands_stn
        target: monitor:bands_stn
      - source: sub_bands:bands_ecog
        target: monitor:bands_ecog
      - source: sub_output:stn_output
        target: monitor:stn_output
    rate: 1
