graphs:
  - id: DummyGraph
    nodes:
    
    # - id: randomCustom
    #   module: dummy.dummy_ephys
    #   class: Testrandom
    #   params:
    #     columns: 4
    #     rows_min: 1
    #     rows_max: 1
    #     value_min: 12
    #     value_max: 30
    #     names: ['one', 'two', 'three']
    #     seed: 1
    
    - id: dummyimport
      module: dummy.dummy_ephys
      class: Dummydata
      params:
        winlen: 250
        datasource: stn

    # - id: add
    #   module: timeflux_example.nodes.arithmetic
    #   class: Add
    #   params:
    #     value: 100
    # - id: display_before
    #   module: timeflux.nodes.debug
    #   class: Display
    # - id: display_after
    #   module: timeflux.nodes.debug
    #   class: Display
    - id: display_dummy
      module: timeflux.nodes.debug
      class: Display
    edges:
    # - source: randomCustom
    #   target: add
    # - source: randomCustom
    #   target: display_before
    # - source: add
    #   target: display_after
    - source: dummyimport
      target: display_dummy
    rate: 4